PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant': '', 'session': '', 'run_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-1,-1,-1]
  expName = value_affirmation
  logging level = debug
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Update marker position and slider rating
        # when there are keypresses of the rating buttons
        r = convert_key_to_rating(value_keyboard.keys)
        value_rating.markerPos = r
        # confirm rating by setting to current markerPos
        value_rating.rating = r
      End Routine:
        rating_text.tStopRefresh = tThisFlipGlobal
        value_rating.tStopRefresh = tThisFlipGlobal
        value_keyboard.tStopRefresh = tThisFlipGlobal
    TextComponent value_message_text
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $message
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    TextComponent rating_text
      font = Helvetica
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
      text = How helpful is this message to help you quit smoking?
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    SliderComponent value_rating
      font = Helvetica
      forceEndRoutine = False
      granularity = 0
      labels = ['not at all','extremely']
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.025)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    KeyboardComponent value_keyboard
      allowedKeys = '5', '6', '7', '8', '9'
      forceEndRoutine = False
      startVal [time (s)] = 6
      stopVal [duration (s)] = 4
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  Routine end
    TextComponent end_text
      durationEstim = 10
      font = Helvetica
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $end_text_duration
      text = $end_text_str
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      durationEstim = 10
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = end_text_duration
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  Routine iti
    ImageComponent intertrial_interval
      durationEstim = 3
      image = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine setup
    CodeComponent choose_conditions_file
      Code Type = Both
      Before Experiment:
        rating_keys = ['5', '6', '7', '8', '9']


        def convert_key_to_rating(key):
            rating = None
            if key in rating_keys:
                rating = int(key)
                rating = rating - 4

            return rating
      Before JS Experiment:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        rating_keys = ["5", "6", "7", "8", "9"];
        function convert_key_to_rating(key) {
            var rating;
            rating = null;
            if (_pj.in_es6(key, rating_keys)) {
                rating = Number.parseInt(key);
                rating = (rating - 4);
            }
            return rating;
        }
      Begin Experiment:
        is_first = True
        if is_first:
            start_text_str = 'Calibrating scanner'
            start_text_duration = 120
            end_text_str = 'The task has ended. The next task will start in a few seconds.'
            end_text_duration = 10
        else:
            start_text_str = ''
            start_text_duration = 0.1
            end_text_str = 'The task has ended. Waiting for researcher to start next task.'
            end_text_duration = 3600

        conditions_file = os.path.join('conditions', f'VAFF_{expInfo["participant"]}_Session{expInfo["session"]}_Run{expInfo["run_number"]}.csv')

        # session 0 is a practice session
        if expInfo['session'] == '0':
            conditions_file = os.path.join('conditions', 'conditions_practice.csv')
            start_text_str = 'Practice for message task'
            start_text_duration = 20
      Begin JS Experiment:
        is_first = true;
        if (is_first) {
            start_text_str = "Calibrating scanner";
            start_text_duration = 120;
            end_text_str = "The task has ended. The next task will start in a few seconds.";
            end_text_duration = 10;
        } else {
            start_text_str = "";
            start_text_duration = 0.1;
            end_text_str = "";
            end_text_duration = 0.1;
        }
        conditions_file = "conditions/" + VAFF_${expInfo["participant"]}_Session${expInfo["session"]}_Run${expInfo["run_number"]}.csv;
        if ((expInfo["session"] === "0")) {
            conditions_file = "conditions/" + "conditions_practice.csv";
            start_text_str = "Practice for values task";
            start_text_duration = 20;
        }
  Routine instructions
    TextComponent title_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = The Message Task
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    TextComponent start_text
      durationEstim = 20
      font = Helvetica
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 2
      stopVal [duration (s)] = $start_text_duration
      text = $start_text_str
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    KeyboardComponent start_trigger
      allowedKeys = ['apostrophe']
      durationEstim = 20
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = $start_text_duration
      store = nothing
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $conditions_file
    loopType = sequential
    nReps = 1
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    Routine trial
    Routine iti
  LoopTerminator trials
  Routine end
